// Function written by Nicolas Stifani nstifani@gmail.com for more info

// Defines Global Variables
requires("1.51n");
var PluginName="KinemaJ";
var MacroName="Crop and Threshold Videos";
var FileExt="AVI";
var MinNbFile=1;
var FolderSuffix="Cropped and Thresholded";
var SubDirArray=newArray("Cropped", "Thresholded");
CellSeparator= "\t";
LineSeparator="\n";

/////////////// Header, Set Preferences, Options and Housekeeping
// Select All measurements, Invert Y, and use 9 decimals
run("Set Measurements...", "area mean standard modal min centroid center perimeter bounding fit shape feret's integrated median skewness kurtosis area_fraction stack display invert redirect=None decimal=9");
run("Line Width...", "line=1"); // Set Line width as 1
run("Input/Output...", "jpeg=100 gif=-1 file=.txt use copy_row save_column"); // Set Output as Txt and save columns and ignore row numbers
run("Point Tool...", "type=Hybrid color=yellow size=Large label show counter=0");// Set the Point tool as yellow Medium Circle
run("Colors...", "foreground=white background=black selection=yellow"); // Set foreground and background colors Selection is yellow
run("Appearance...", "  menu=0 16-bit=Automatic"); // Change appareance of 16bit image as automatic
run("Misc...", "divide=Infinity"); // Make sure Miscellaneous Options are set correctly
run("Overlay Options...", "stroke=cyan width=2 point=Hybrid size=Large fill=none apply show");
run("Labels...", "color=White font=10 show bold");
call("ij.Prefs.set", "threshold.mode", 0); // Make the ImageJ preferences for threshold visualisation as Red over background

// Set IJ Size and position
IJPosX=screenWidth*0.1; // The position of ImageJ in X // Set IJ Size and position
IJPosY=screenHeight*0; // The position of ImageJ in Y at the top of the screen
IJSizeX=570; // The width of ImageJ toolbar in pixel
IJSizeY=100; // The Height of ImageJ toolbar in pixel
Spacer=25; // A spacer
DummyVariable=eval("script","IJ.getInstance().setLocation("+IJPosX+","+IJPosY+");"); // Adjust the position of the ImageJ toolbar

// Set Toolbar Size and position
ToolbarSizeX=250;// Set Toolbar Size and position
ToolbarSizeY=200; // Size of the toolbar
ToolbarPosX=IJPosX+IJSizeX+Spacer; // Position of the Toolbar is to the right of the ImageJ toolbar
ToolbarPosY=IJPosY; // Position of to the Toolbar in Y

// Position the Toolbar
if(isOpen(PluginName+" Toolbar")){
  selectWindow(PluginName+" Toolbar");
  setLocation(ToolbarPosX,ToolbarPosY);
}

// Set Threshold Window Size and Position
ThresholdSizeX=290;
ThresholdSizeY=260;
ThresholdPosX=ToolbarPosX; // The Position in X of the threshold window is below the toolbar
ThresholdPosY=ToolbarPosY+ToolbarSizeY+Spacer; // Threshold toolbar is just below the plugin toolbar
call("ij.Prefs.set", "threshold.loc", ThresholdPosX+" , "+ThresholdPosY);

// Set ROI Manager Size and Position
ROIManagerSizeX=250;
ROIManagerSizeY=300;
ROIManagerPosX=ToolbarPosX; // The Position in X of the ROI manager window which is to the right of the Treshold widnow
ROIManagerPosY=ToolbarPosY+ToolbarSizeY+Spacer+ThresholdSizeY+Spacer;
call("ij.Prefs.set", "manager.loc", ROIManagerPosX+" , "+ROIManagerPosY);

// Set Results Size and Position to the right of the toolbar until the bottom of Threhsold window
ResultsSizeX=(screenWidth-(ToolbarPosX+ToolbarSizeX+Spacer));
ResultsSizeY=ROIManagerPosY-Spacer;
ResultsPosX=ToolbarPosX+ToolbarSizeX+Spacer;
ResultsPosY=ToolbarPosY;
call("ij.Prefs.set", "results.loc", ResultsPosX+" , "+ResultsPosY);
call("ij.Prefs.set", "results.width", ResultsSizeX);
call("ij.Prefs.set", "results.height", ResultsSizeY);


// Set Log location
LogSizeX=(screenWidth-(ToolbarPosX+ToolbarSizeX+Spacer));
LogSizeY=ROIManagerPosY-Spacer;
LogPosX=ToolbarPosX+ToolbarSizeX+Spacer; // The Position in X of the ROI manager window
LogPosY=ToolbarPosY;
call("ij.Prefs.set", "log.loc", LogPosX+" , "+LogPosY);

// Set Debug location
DebugSizeX=(screenWidth-(ToolbarPosX+ToolbarSizeX+Spacer));
DebugSizeY= ROIManagerPosY-Spacer;
DebugPosX=ToolbarPosX+ToolbarSizeX+Spacer; // The Position in X of the ROI manager window
DebugPosY=ToolbarPosY;
call("ij.Prefs.set", "debug.loc", DebugPosX+" , "+DebugPosY);
// Set point Tool location
PointToolSizeX=250;
PointToolSizeY=300;
PointToolPosX= ToolbarPosX+ROIManagerSizeX+Spacer; //PointTool is at the right of the ROI Manager
PointToolPosY= ToolbarPosY+ToolbarSizeY+Spacer+ThresholdSizeY+Spacer;

// Set Brightness and contrast location
BCSizeX=150;
BCSizeY=300;
BCPosX=PointToolPosX+PointToolSizeX+Spacer; // Brigthness and contrsat is at the right of PointTool
BCPosY=ROIManagerPosY;
call("ij.Prefs.set", "b&c.loc", BCPosX+" , "+BCPosY);
//////////////// Header and Housekeeping



//////////////// General Functions
// Function to Append to an array
function Append(ArrayI, Value) {
  ArrayJ = newArray(ArrayI.length+1);
  for (ValueI=0; ValueI<ArrayI.length; ValueI++)
  ArrayJ[ValueI] = ArrayI[ValueI];
  ArrayJ[ArrayI.length] = Value;
  return ArrayJ;
}

// Function to display a message
var MessageDialogPass;
function MessageDialog(Message){
  MessageDialogPass=0;
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(Message);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  ListUtilityWindows=newArray("Threshold", "Results", "ROI Manager", "B&C");
  CloseUtilityWindows(ListUtilityWindows);
  Dialog.show();
  MessageDialogPass=1;
}

// Function to display an error and propose to Fix it / Try again or to quit
var ErrorDialogPass;
var UserResponseErrorDialog;
function ErrorDialog(MessageError, MessageFix, ErrorResponseArray){
  ErrorDialogPass=0;
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(MessageError);
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(MessageFix);
  Dialog.setInsets(0, 0, 0);
  Dialog.setInsets(0, 20, 0);
  Dialog.addRadioButtonGroup("", ErrorResponseArray, ErrorResponseArray.length, 1, ErrorResponseArray[0]);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  ListUtilityWindows=newArray("Threshold", "Results", "ROI Manager", "B&C");
  CloseUtilityWindows(ListUtilityWindows);
  Dialog.show();
  UserResponseErrorDialog=Dialog.getRadioButton();
  return UserResponseErrorDialog;
}

// Function to select an Input Directory containing at least MinNbFile with the correct File Extension FileExt
var SelectInputDirPass; // Switch for the dialog box
var InputDirPath; // Path of the input directory
var ParentDir; // ParentDirectory of the selected input directory
var InputDirName; // Name of the Input Directory
var NbFileWithCorrectExt; // Nb of File with the correct extension in the input directory
var InputItemList; // List of Files and folders in the input directory (all files no matter the extension)
var InputCorrectExtFileList; // List of files with the correct extension
var InputFileList;
var NbFile;

function SelectInputDir(MinNbFile, FileExt){
  // MinNbFile This is the minimum Nb of File to be present in the list to be accepted
  // FileExt This is the File extension as a string example "tif"
  InputDirPath=getDirectory("Select a FOLDER containing at least "+MinNbFile+" "+FileExt+" file(s) to process."); // Select a Folder
  InputItemList=getFileList(InputDirPath); // List of Item in the selected folder
  ParentDir=File.getParent(InputDirPath)+File.separator;
  InputDirName=File.getName(InputDirPath);

  SelectInputDirPass=0; // Switch for the Function
  NbFileWithCorrectExt=0; // Count of Nb of Files
  BaseNameError=0; // Switch to make sure there is only one "." in the filename
  InputCorrectExtFileList=newArray(0);
  UserResponseErrorDialog="";

  // Evaluate the Nb of File with correct extension and add them to InputCorrectExtFileList
  for (ItemI=0; ItemI<InputItemList.length; ItemI++){
    if(endsWith(toLowerCase(InputItemList[ItemI]), "."+toLowerCase(FileExt))){ // Select files with correct extension
      InputCorrectExtFileList=Append(InputCorrectExtFileList, InputItemList[ItemI]);
    }
  }
  NbFileWithCorrectExt=InputCorrectExtFileList.length;
  if(NbFileWithCorrectExt<MinNbFile){ // If the Nb of File with correct extension is not at least equal to the MinNbFile Create Error Message.
    MessageError="Sorry but the folder:\n\"" +InputDirName+"\"\ndoes not contain at least "+MinNbFile+" "+FileExt+" file(s).";
    MessageFix="The function \""+MacroName+"\" requires a folder that contains at least "+MinNbFile+" "+FileExt+" file(s).";
    ErrorResponseArray=newArray("Select Another Folder", "Cancel and Close");
    MessageQuit="The function \""+ MacroName+"\" stopped because the folder:\n\"" +InputDirName+"\"\ndid not contain at least "+MinNbFile+" "+FileExt+" file(s).";
    UserResponseErrorDialog=ErrorDialog(MessageError, MessageFix, ErrorResponseArray);
    if(UserResponseErrorDialog==ErrorResponseArray[ErrorResponseArray.length-1]){
      CleanExit(MessageQuit);
    } else if(UserResponseErrorDialog=="Select Another Folder") { // Else user want to select another folder
      SelectInputDirPass=0;
    }
  } else { // if NbFileWithCorrectExt is above or equal MinNbFile Evaluate Filenames
    InputFileList=newArray(0);
    for (FileI=0; FileI<InputCorrectExtFileList.length; FileI++){
      BasenameFileIArray=split(InputCorrectExtFileList[FileI],"."); // Make an array from the filename
      if(BasenameFileIArray.length!=2){// if there is more than one . in the file name abort
        MessageError="Sorry but the "+FileExt+" file:\n\""+InputCorrectExtFileList[FileI]+"\"\ncontains more than one \".\" in its filename.";
        MessageFix="The function \""+MacroName+"\" does NOT allow filenames with more than one unique \".\" used for the file extension.";
        ErrorResponseArray=newArray("Select Another Folder", "Ignore This File", "Cancel and Close");
        MessageQuit="The function \""+ MacroName+"\" stopped because the file\n\""+InputCorrectExtFileList[FileI]+"\"\ncontains more than one \".\"\nMake sure filenames have no more than one unique \".\" for the file extension.";
        UserResponseErrorDialog=ErrorDialog(MessageError, MessageFix, ErrorResponseArray);
        if(UserResponseErrorDialog==ErrorResponseArray[ErrorResponseArray.length-1]){
          CleanExit(MessageQuit);
        } else if (UserResponseErrorDialog=="Ignore This File"){

        } else if (UserResponseErrorDialog=="Select Another Folder") {
          FileI=InputCorrectExtFileList.length;
          SelectInputDirPass=0;
        //  ErrorDialogPass=1;
        }
      }else { // If basename is good add it to the InputFileList
        InputFileList=Append(InputFileList, InputCorrectExtFileList[FileI]);
      }
    }
    // Make sure InpuFileList is > MinNbFile
    NbFile=InputFileList.length;
    if(NbFile<MinNbFile && UserResponseErrorDialog!="Select Another Folder"){ // If the Nb of File with correct extension is not at least equal to the MinNbFile Create Error Message.
      MessageError="Sorry but the Folder:\n\"" +InputDirName+"\"\ndoes not contain at least "+MinNbFile+" "+FileExt+" File with no more than one \".\" in its filename.";
      MessageFix="The function \""+MacroName+"\" requires a folder that contains at least "+MinNbFile+" "+FileExt+" File with one unique \".\" used for the file extension.";
      ErrorResponseArray=newArray("Select Another Folder", "Cancel and Close");
      MessageQuit="The function \""+ MacroName+"\" stopped because the Folder:\n\"" +InputDirName+"\"\ndid not contain at least "+MinNbFile+" "+FileExt+" File no more than one \".\" in its filename.";
      UserResponseErrorDialog=ErrorDialog(MessageError, MessageFix, ErrorResponseArray);
      if(UserResponseErrorDialog==ErrorResponseArray[ErrorResponseArray.length-1]){
        CleanExit(MessageQuit);
      } else {
        SelectInputDirPass=0;
      }
    } else if (UserResponseErrorDialog=="Select Another Folder"){
      SelectInputDirPass=0; // InputDir Pass the criteria
    } else {
      SelectInputDirPass=1; // InputDir Pass the criteria
    }
  }
} // End of Function Select InputDir

// Function to create a new output directory
var OutputDirPath; // The path of the output directory
var OutputDirName; // The name of the output directory
function CreateOutputDir(ParentDir, InputDirName, FolderSuffix){ // Folder suffix is a string appended to the input Directory
  OutputDirPath=ParentDir+InputDirName+"_"+FolderSuffix+File.separator; // Create the outputdirpath
  n=1;
  while(File.exists(OutputDirPath)!=0){ // If the path already exist, increment with _ n until it does not exist
    n++;
    OutputDirPath=ParentDir+InputDirName+"_"+FolderSuffix+"_"+n+File.separator;
  } // End of making sure the outpudirectory is a new folder
  File.makeDirectory(OutputDirPath); // Create the outpudirectory
  OutputDirName=File.getName(OutputDirPath); // Get the Name of the output directory
}

////////// Function to create subfolders within the newly create outputdirectory
function CreateOutputSubDir(SubDirArray) { // SubDirArray is an array of the desired subfolders
  for(i=0;i<SubDirArray.length;i++){
    SubDirPath=OutputDirPath+SubDirArray[i]+File.separator; // Because outpudirpath is unique and new the subfolders do not exist yet so no need to check if they are already present
    File.makeDirectory(SubDirPath);
  } // End of for
} // End of CreateOutputSubDir function
// NOTE:It is useful to create a string for the subdirectory paths
// For each element in the subdirarray addMessage
// Output[SubDirArrayElementN]Path=""+OutputDirPath+"[SubDirArrayElementN]"+File.separator;
// Then you can use directly the string to save within a subdirectory

////// Close Function
function CloseAndCleanUp(PluginName, FileI, NbFile, FileExt, InputDirName, OutputDirName){
  beep();

  ListImages=getList("image.titles");
  for(n=0; n<ListImages.length; n++){
    ImageN=ListImages[n];
    selectWindow(ImageN);    run("Close");
  }


  /////////////////////// Closing Dialog Box
  Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(FileI+" of "+ NbFile+" "+ FileExt+ " file(s) in the folder:\n\""+InputDirName+"\"\nhave been processed successfully.");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage("Files are saved in the following folder:\n\""+OutputDirName+"\".");
  Dialog.setInsets(0, 0, 0);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  ListUtilityWindows=newArray("Threshold", "Results", "ROI Manager", "B&C");
  CloseUtilityWindows(ListUtilityWindows);
  Dialog.show();
}  ///////////////////////// End of Close Function

////// CleanExit Function
function CleanExit(MessageQuit){
  beep();
  if(isOpen("Threshold")){    selectWindow("Threshold");    run("Close");  }//end of if threshold is open
  if(isOpen("Results")){    run("Clear Results");    selectWindow("Results");    run("Close");  }//end of if Results is open
  if(isOpen("ROI Manager")){    roiManager("reset");    selectWindow("ROI Manager");    run("Close");  }//End of Close the ROI Manager
  if(isOpen("B&C")){    selectWindow("B&C");    run("Close");  }//End of Close the Brightness window

  ListImages=getList("image.titles");
  for(n=0; n<ListImages.length; n++){
    ImageN=ListImages[n];
    selectWindow(ImageN);    run("Close");

  }
Dialog.create(PluginName+" Information");
  Dialog.setInsets(0, 0, 0);
  Dialog.addMessage(MessageQuit);
  Dialog.setInsets(0, 0, 0);
  Dialog.setLocation(ToolbarPosX, ToolbarPosY+ToolbarSizeY+2*Spacer);
  ListUtilityWindows=newArray("Threshold", "Results", "ROI Manager", "B&C");
  CloseUtilityWindows(ListUtilityWindows);
  Dialog.show();
  exit();
}  ///////////////////////// End of CleanExit Function

//////////Close UtilityWindows
function CloseUtilityWindows(ListUtilityWindows){
// Typically  ListUtilityWindows=newArray("Threshold", "Results", "ROI Manager", "B&C");
  for(WindowI=0; WindowI<ListUtilityWindows.length; WindowI++){
    UtilityWindowI=ListUtilityWindows[WindowI];
    if(isOpen(UtilityWindowI)){
      if(UtilityWindowI=="Results"){        run("Clear Results");       }
      if(UtilityWindowI=="ROI Manager"){       roiManager("reset");      }
        selectWindow(UtilityWindowI); run("Close");
      }
  }
}
//////////End of Close UtilityWindows
////////////////////End of General Functions

// Macro starts here
// Initial Message
InitialMessage="The function \""+MacroName+"\" will:"
+"\n - Prompt to select a folder containing at least "+MinNbFile+" "+FileExt+" file(s) to process"
+"\n - Prompt to select a TXT file containing ROI Coordinates and Threshold Values"
+"\n\nFor each "+FileExt+" file:"
+"\n - Cropped Videos with the values found in the TXT file"
+"\n - Cropped amd Threshold Videos with the values found in the TXT file"
+"\n - Save Videos as TIF files";

MessageDialog(InitialMessage); // Display the Initial Message

// Select the InputDirectory
do{
  SelectInputDir(MinNbFile,FileExt);
}while(SelectInputDirPass!=1)




///////////////////////////// Look for CSV File
ParentDirList=getFileList(ParentDir);
NbPotentialCSV=0;
for(n=0;n<ParentDirList.length;n++){
  ItemName=ParentDirList[n];
  if(matches(ItemName, InputDirName+"_ROI and Threshold Values/?_?[0-9]*/?")){
    NbPotentialCSV++;
    ItemNumber=n;
  }
}

////////// If only one ROI and Threshold Value folder is present pick the CSV file in it
if(NbPotentialCSV==1){
  CSVFilePath=ParentDir+ParentDirList[ItemNumber]+"ROI and Threshold Values.CSV";
} else if(NbPotentialCSV!=1){
  CSVFilePath=File.openDialog("Select the CSV File containing ROI Coordinates and Threshold Values");
}


// Criteria to check CSV file
RequiredHeaderPass=0;
RequiredFilePass=0;
RequiredHeaderList=newArray("Filename", "ROIPosX", "ROIPosY", "ROIWidth","ROIHeight", "LowerValue","UpperValue");
RequiredFileList=InputFileList;

// Check CSV file integrity
while((endsWith(toLowerCase(CSVFilePath), ".csv")!=1) || (RequiredHeaderPass!=RequiredHeaderList.length) || (RequiredFilePass!=RequiredFileList.length)){
  // if it is not a CSV
  if(endsWith(toLowerCase(CSVFilePath), ".csv")!=1){
    Dialog.create(PluginName+" Information");
    Dialog.setInsets(0, 0, 0);
    Dialog.addMessage("Sorry but \""+File.getName(CSVFilePath)+"\" is not a CSV File.");
    TryAgainCancelCloseArray=newArray("Try again", "Cancel and Close");
    Dialog.setInsets(5, 150, 0);
    Dialog.addRadioButtonGroup("", TryAgainCancelCloseArray, 2,1, "Try again");
    Dialog.setLocation(IJPosX, IJPosY+IJSizeY+Spacer);
    // Display the Dialog and get user choice
    Dialog.show();
    UserChoice = Dialog.getRadioButton();
    if (UserChoice=="Cancel and Close"){
      exit(PluginName+" "+MacroName+" stopped because \"" +File.getName(CSVFilePath)+"\" is not a CSV File.");
    }
  } else if(endsWith(toLowerCase(CSVFilePath), ".csv")==1){ // if it ends by CSV then
    // Evaluate the header
    open(CSVFilePath);
    CSVFileHeadingArray=split(String.getResultsHeadings);
    if(isOpen("Results")){
      run("Clear Results");
      selectWindow("Results");
      run("Close");
    }

    RequiredHeaderPass=0;
    // Transform the Header Array into a string
    CSVFileHeadingString="";
    for (n=0; n<CSVFileHeadingArray.length; n++){
      CSVFileHeadingString=CSVFileHeadingString+"\n"+CSVFileHeadingArray[n];
    }


    for (ItemI=0; ItemI<RequiredHeaderList.length; ItemI++){ // Screen the RequiredItem List
      if(indexOf(CSVFileHeadingString , RequiredHeaderList[ItemI])>0){ // if RequiredItem is Present in the ItemList
        RequiredHeaderPass++;
      } // end of If present increment
    } // end of for

    // If header is not good
    if(RequiredHeaderPass!=RequiredHeaderList.length){
      Dialog.create(PluginName+" Information");
      Dialog.setInsets(0, 0, 0);
      Dialog.addMessage("Sorry but \""+File.getName(CSVFilePath)+"\" does not contain the required columns.");
      for (n=0;n<RequiredHeaderList.length;n++){
        if(n==0){
          RequiredMessageHeader=RequiredHeaderList[n];;
        } else if (n>0){
          RequiredMessageHeader=RequiredMessageHeader+", "+RequiredHeaderList[n];
        }
      }
      Dialog.setInsets(0, 0, 0);
      Dialog.addMessage("The required columns are:\n"+RequiredMessageHeader+".");
      TryAgainCancelCloseArray=newArray("Try again", "Cancel and Close");
      Dialog.setInsets(5, 150, 0);
      Dialog.addRadioButtonGroup("", TryAgainCancelCloseArray, 2,1, "Try again");
      Dialog.setLocation(IJPosX, IJPosY+IJSizeY+Spacer);
      // Display the Dialog and get user choice
      Dialog.show();
      UserChoice = Dialog.getRadioButton();
      if (UserChoice=="Cancel and Close"){
        exit(PluginName+" "+MacroName+" stopped because " +File.getName(CSVFilePath)+" did not contain the required columns.");
      }
    }  // end of prompt if header is not good

    // if it is a CSV and the header is correct check that all files have values
    if(RequiredHeaderPass==RequiredHeaderList.length){
      // Create an array of the FileName from the CSV file
      open(CSVFilePath);
      FileNameArray = newArray(nResults);
      for (n=0;n<nResults;n++){
        FileNameArray[n] = getResultString("Filename", n);
      } // end of populating the array
      if(isOpen("Results")){
        run("Clear Results");
        selectWindow("Results");
        run("Close");
      }



      RequiredFilePass=0;
      FileNameString="";
      for (n=0; n<FileNameArray.length; n++){
        FileNameString=FileNameString+"\n"+FileNameArray[n];
      }
      for (ItemI=0; ItemI<RequiredFileList.length; ItemI++){ // Screen the RequiredItem List
        BasenameIArray=split(RequiredFileList[ItemI],".");
        if(indexOf(FileNameString , BasenameIArray[0])>0){ // if RequiredItem is Present in the ItemList
          RequiredFilePass++;
        } // end of If present increment
      } // end of for

      // If some input file do not have data in the CSV
      if(RequiredFilePass!=RequiredFileList.length){

        Dialog.create(PluginName+" Information");
        Dialog.setInsets(0, 0, 0);
        Dialog.addMessage("Sorry but \""+File.getName(CSVFilePath)+"\" does not contain values for all the selected "+FileExt+" Files.");
        TryAgainCancelCloseArray=newArßray("Try again", "Cancel and Close");
        Dialog.setInsets(5, 150, 0);
        Dialog.addRadioButtonGroup("", TryAgainCancelCloseArray, 2,1, "Try again");
        Dialog.setLocation(IJPosX, IJPosY+IJSizeY+Spacer);
        // Display the Dialog and get user choice
        Dialog.show();
        UserChoice = Dialog.getRadioButton();
        if (UserChoice=="Cancel and Close"){
          exit(PluginName+" "+MacroName+" stopped because \"" +File.getName(CSVFilePath)+"\" did not contain values for all the selected "+FileExt" Files.");
        }
      } else if (RequiredFilePass==RequiredFileList.length){ // if it passes all requirements
        UserChoice=""; // do not prompt
      } // End if values for processing all input files are not present
    } // End of If Header is correct
  } // End of if it is CSV

  // If file not correct prompt to select a new CSV file
  if (UserChoice=="Try again"){
    CSVFilePath=File.openDialog("Select the CSV File containing ROI Coordinates and Threshold Values");
    RequiredHeaderPass=0;
    RequiredFilePass=0;
  }
} // End of While loop checking for CSV file integrity
////////// End of If ROI and Threshold Value folder is ambiguous



////////////////////////////// Read the CSV File
open(CSVFilePath);
CellSeparator= "\t";
LineSeparator="\n";

FileNameArray = newArray(nResults);
ROIPosXArray = newArray(nResults);
ROIPosYArray = newArray(nResults);
ROIWidthArray = newArray(nResults);
ROIHeightArray = newArray(nResults);
ThresholdLowerValueArray = newArray(nResults);
ThresholdUpperValueArray = newArray(nResults);
// Populate the Array with the results
for (n=0;n<nResults;n++){
  FileNameArray[n] = getResultString("Filename", n);
  ROIPosXArray[n] = getResult("ROIPosX",n);
  ROIPosYArray[n] = getResult("ROIPosY",n);
  ROIWidthArray[n] = getResult("ROIWidth",n);
  ROIHeightArray[n] = getResult("ROIHeight",n);
  ThresholdLowerValueArray[n] = getResult("LowerValue",n);
  ThresholdUpperValueArray[n] = getResult("UpperValue",n);
}// end of populating the arrays


// Close results windows if it is open
if(isOpen("Results")){
  run("Clear Results");
  selectWindow("Results");
  run("Close");
}//end of if Results is open
////////////////////////////// End of Read the CSV File




// Create Unique Output directory
CreateOutputDir(ParentDir, InputDirName, FolderSuffix);

// Create OutputSubdirectories
CreateOutputSubDir(SubDirArray);
OutputImageCroppedPath=""+OutputDirPath+"Cropped"+File.separator;
OutputImageThresholdedPath=""+OutputDirPath+"Thresholded"+File.separator;





setBatchMode(true);
//////////////////////////// Process each File
//////////////////////////// Process each File
for (FileI = 0; FileI < InputFileList.length; FileI++){

  InputFileNameI=InputFileList[FileI];
  BasenameArray=split(InputFileNameI,".");
  InputFileNameINoExt=BasenameArray[0];
  InputFilePathI = InputDirPath+InputFileNameI;
  run("AVI...", "select=&InputFilePathI convert");

  ///////////// Look for the matching filename in the arrays and get the values
  RowI=0;
  while(FileNameArray[RowI]!=InputFileNameINoExt){
    RowI++;
  }
  FileNameRowI = FileNameArray[RowI];
  ROIPosX = ROIPosXArray[RowI];
  ROIPosY = ROIPosYArray[RowI];
  ROIWidth = ROIWidthArray[RowI];
  ROIHeight = ROIHeightArray[RowI];
  ThresholdLowerValue = ThresholdLowerValueArray[RowI];
  ThresholdUpperValue = ThresholdUpperValueArray[RowI];

  // Open avi File
  run("AVI...", "select=&InputFilePathI convert");

  makeRectangle(ROIPosX, ROIPosY, ROIWidth, ROIHeight);
  run("Crop");
  saveAs("Tif", OutputImageCroppedPath+InputFileNameINoExt);

  // Transform to 8 bit and Threshold
  run("8-bit");
  setThreshold(ThresholdLowerValue, ThresholdUpperValue, "BlackBackground");
  run("Convert to Mask", "stack");
  saveAs("Tif", OutputImageThresholdedPath+InputFileNameINoExt);
  close();

  // Update the progress bar
  showProgress(FileI, InputFileList.length);
}/////////////////////End of for FileI loop

CloseAndCleanUp(PluginName, FileI, NbFile, FileExt, InputDirName, OutputDirName);
